PsychoPy2experiment version="2021.1.4"
Settings
  Experiment info = {'participant': 'P000', 'Study Name': '', 'Task Version (required to run)': '1 or 2', 'PRE/POST': 'Pre or Post'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1536, 864]
  color = black
  expName = Go No-Go Task
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Routines
  Routine Start
    CodeComponent code
      Code Type = Auto->JS
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      Begin Experiment:
        import pandas as pd

        fileName = ['SadFaces.csv', 'NeutralFaces.csv', 'HappyFaces.csv']
        conditionFile = pd.DataFrame(columns=['FaceFile'])  # where 'painting' is the column name for your images

        for files in fileName:
            myDat = pd.read_csv(files)  # Get conditions file
            myDat = myDat.sample(frac=1).reset_index(drop=True)  # Shuffle the dataframe
            myDat = myDat.head(8)  # Take first 8 rows from sheet
            conditionFile = conditionFile.append(myDat)  # Append to new conditions file variable

        conditionFile.to_csv("randPainting.csv", index=False)  # Save to new csv file for use in the loop handler.

        #create initial target set
        imgList1 = glob.glob(os.path.join('stim','*.png'))
        random.shuffle(imgList1)
        targetset = [visual.ImageStim(window, img) for img in imgList1[:3]]
  Routine Instructions
    TextComponent Text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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    KeyboardComponent key_resp_2
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Topload
    CodeComponent code_3
      Code Type = Auto->JS
  Routine Hard_Script
    CodeComponent code_2
      Code Type = Auto->JS
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      Begin Experiment:
        win.setMouseVisible(False)
    CodeComponent code_6
      Code Type = Auto->JS
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      Begin Experiment:
        BlockNo = 1
        PractNo = 1
    CodeComponent code_9
      Code Type = Auto->JS
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      Begin Experiment:
        TaskVersion = expInfo['Task Version (required to run)']

        TaskVersion = TaskVersion.replace(' ', '')

        if TaskVersion == '1':
                VersionSelection = 'ParentConditions/ConditionsMaster_v1.xlsx'


        if TaskVersion == '2':
                VersionSelection = 'ParentConditions/ConditionsMaster_v2.xlsx'
  Routine Break
  Routine Instructions_2
    TextComponent text_2
      color = red
      letterHeight = 0.05
      pos [set every repeat] = (0, -0.10)
      startVal [time (s)] = 0.0
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      text [set every repeat]:
        $Instructions
    TextComponent text_3
      letterHeight = 0.05
      pos [set every repeat] = (0, -0.25)
      startVal [time (s)] = 3.0
      text [set every repeat] = Please press 'spacebar' to begin.
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    KeyboardComponent key_resp_3
      allowedKeys [set every repeat] = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 3.0
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    TextComponent TaskBlock
      letterHeight = 0.05
      pos = (-0.07, 0.05)
      startVal [time (s)] = 0.0
      text [set every repeat] =   Task block:
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    TextComponent BlockNo1
      color [set every repeat] = green
      letterHeight [set every repeat] = 0.05
      pos [set every repeat] = (0.095, 0.05)
      startVal [time (s)] = 0.0
      text [set every repeat] = $BlockNo
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    TextComponent OfBlock
      letterHeight = 0.05
      pos = (0.17, 0.05)
      startVal [time (s)] = 0.0
      text [set every repeat] = of 6.
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  Routine EmotionTaskInstructions
    TextComponent text4
      letterHeight [set every repeat] = 0.04
      startVal [time (s)] = 0.0
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      text [set every repeat]:
        For this task, you will see a series of images appear onscreen. They will only appear for a short period of 300ms.

        You must press spacebar when images appear onscreen. Failing to do so will result in a miss (incorrect) result.

        Please press 'spacebar' to continue.
    KeyboardComponent EmotionTaskInstructions1
      allowedKeys [set every repeat] = 'space'
      discard previous = False
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine ISI_2
    CodeComponent TimeSetISI
      Code Type = Auto->JS
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      Begin Routine:
        if InnerLoop.thisN == 0: # only on the first trial
            jitters = [1.2,1.21,1.22,1.23,1.24,1.25,1.26,1.27,1.28
            ,1.29,1.30,1.31,1.32,1.33,1.34,1.35,1.36,1.37,1.38,1.39,1.4,1.41,
            1.42,1.43,1.44,1.45,1.46,1.47,1.48,1.49,1.5,1.51,1.52,1.53,
            1.54,1.55,1.56,1.57,1.58,1.59,1.6,1.61,1.62,1.63,1.64,
            1.65,1.66,1.67,1.68,1.69,1.7,1.71,1.72,1.73,1.74,1.75,1.76,
            1.77,1.78,1.79,1.8,1.81,1.82,1.83,1.84,1.85,1.86,1.87,1.88,1.89,1.9,1.91,1.92,1.93,
            1.94,1.95,1.96,1.97,1.98,1.99,2] # create the list
            shuffle(jitters) # randomise its order

        current_jitter = jitters.pop() # extract one entry on each trial
        thisExp.addData('ISIjitter', current_jitter) # record in the data for this trial
    TextComponent ISImarker
      letterHeight = 0.25
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $current_jitter
      text [set every repeat] = +
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  Routine EmotTrial
    KeyboardComponent key_resp
      allowedKeys [set every repeat] = 'space', 'None'
      correctAns = $CorrectAnsP
      forceEndRoutine = False
      startVal [time (s)] = 0.1
      stopVal [duration (s)] = 0.40
      storeCorrect = True
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    ImageComponent FaceSet
      image [set every repeat] = $FaceE
      size [set every repeat] = (0.7, 0.3)
      startVal [time (s)] = 0.1
      stopVal [duration (s)] = 0.40
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    ImageComponent Colour
      image [set every repeat] = $ColourF
      opacity [set every repeat] = 0.36
      size [set every repeat] = (0.7, 0.3)
      startVal [time (s)] = 0.1
      stopVal [duration (s)] = 0.40
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  Routine EndBlock
    TextComponent EndBlockText
      letterHeight = 0.05
      pos = (0, 0.05)
      startVal [time (s)] = 0.0
      text = End of block.
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    KeyboardComponent key_resp_4
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.5
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    CodeComponent code_8
      Code Type = Auto->JS
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      Begin Routine:
        if BlockNo <= 6:
           Breaktext = 'Please take a break if needed.'
        else:
           Breaktext = ''
    TextComponent BreakText2
      letterHeight = 0.05
      pos = (0, -0.10)
      startVal [time (s)] = 0.0
      text [set every repeat] = $Breaktext
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    TextComponent PressToContinue
      letterHeight = 0.05
      pos = (0, -0.25)
      startVal [time (s)] = 0.0
      text [set every repeat] = Please press 'spacebar' to continue.
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  Routine EndEmotionTask
    TextComponent text_9
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        End of test.

        Thank you for participating.

        Please inform the researcher of your completion.

        Press 'escape' to close.
  Routine Break1
    TextComponent BreakText1
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.1
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  Routine Blank
    TextComponent text
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.1
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  Routine EmotionalTaskInstructions2
    TextComponent text_4
      letterHeight [set every repeat] = 0.04
      startVal [time (s)] = 0.0
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      text [set every repeat]:
        The images will have different features (eyes or blocks). You only need to focus on the colour of the image.

        You need to press 'spacebar' for most images, but for some you must not. You will be instructed when not to by rules.

        Please press 'spacebar' to continue.
    KeyboardComponent key_resp_5
      allowedKeys [set every repeat] = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine EPracticeInstructions
  Routine EPracticeInstructions2
    TextComponent text_5
      color = red
      letterHeight = 0.05
      pos = (0, -0.10)
      startVal [time (s)] = 0.0
      text [set every repeat] = $Instructions
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    TextComponent text_6
      letterHeight = 0.05
      pos [set every repeat] = (0, -0.25)
      startVal [time (s)] = 3.0
      text [set every repeat] = Please press spacebar to begin.
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    KeyboardComponent key_resp_7
      allowedKeys [set every repeat] = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 3.0
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    TextComponent text_10
      color [set every repeat] = green
      font [set every repeat] = Arial
      letterHeight [set every repeat] = 0.05
      pos [set every repeat] = (0.095, 0.05)
      startVal [time (s)] = 0.0
      text [set every repeat] = $PractNo
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    TextComponent text_11
      letterHeight = 0.05
      pos = (-0.089, 0.05)
      startVal [time (s)] = 0.0
      text = Practice block:
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    TextComponent text_12
      letterHeight = 0.05
      pos = (0.163, 0.05)
      startVal [time (s)] = 0.0
      text = of 4
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  Routine EPracticeISI
    CodeComponent EPracticeISICode
      Code Type = Auto->JS
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      Begin Routine:
        if EPracticeInnerLoop.thisN == 0: # only on the first trial
            jitters = [1.2,1.3,1.4,1.5,1.6,1.7,1.8,1.9] # create the list
            shuffle(jitters) # randomise its order

        current_jitter = jitters.pop() # extract one entry on each trial
        thisExp.addData('ISIjitterPractice', current_jitter) # record in the data for this trial
    TextComponent EPracticeISIMarker
      letterHeight [set every repeat] = 0.25
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $current_jitter
      text [set every repeat] = +
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  Routine EPracticeTrial
    KeyboardComponent Pract
      allowedKeys = 'space','None'
      correctAns = $CorrectAnsP
      forceEndRoutine = False
      startVal [time (s)] = 0.1
      stopVal [duration (s)] = 0.40
      storeCorrect = True
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    ImageComponent PracticeFace
      image [set every repeat] = $FaceE
      size = (0.7, 0.3)
      startVal [time (s)] = 0.1
      stopVal [duration (s)] = 0.40
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    ImageComponent ColourPractice
      image [set every repeat] = $ColourF
      opacity [set every repeat] = 0.36
      size [set every repeat] = (0.7, 0.3)
      startVal [time (s)] = 0.1
      stopVal [duration (s)] = 0.40
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    CodeComponent code_5
      Code Type = Auto->JS
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      End Routine:
        if Pract.corr==1:
                PracticeFeedback = 'Correct'
                FeedbackColour = 'green'

        if Pract.corr==0:
                PracticeFeedback = 'Incorrect'
                FeedbackColour = 'red'

        if Pract.corr==0 and Pract.keys== None:
                PracticeFeedback = 'Miss (too slow)'
                FeedbackColour = 'orange'
  Routine EPracticeEndBlock
  Routine EndPracticeEndInstructions
    TextComponent EndOfPractice
      letterHeight [set every repeat] = 0.05
      startVal [time (s)] = 0.0
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      text [set every repeat]:
        End of practice.

        Please keep in mind: You will no longer receive feedback on responses ("correct","incorrect", or "too slow") in the real task.

        Press 'spacebar' to continue
    KeyboardComponent key_resp_8
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.5
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  Routine PracticeFeedbackBlock
    TextComponent text_7
      color [set every repeat] = $FeedbackColour
      letterHeight [set every repeat] = 0.07
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 2.0
      text [set every repeat] = $PracticeFeedback
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  Routine RealTaskPreInstructions
    TextComponent text_8
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        You will now begin the real task.

        Please press 'spacebar' to continue.
    KeyboardComponent key_resp_6
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Add
    CodeComponent code_4
      Code Type = Auto->JS
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      Begin Routine:
        PractNo = PractNo + 1
  Routine fff
  Routine Add2
    CodeComponent code_7
      Code Type = Auto->JS
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      Begin Routine:
        BlockNo = BlockNo + 1
  Routine EmotionalTaskInstructions3
    TextComponent Text_14
      letterHeight = 0.04
      startVal [time (s)] = 0.0
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      text:
        Rules are given at the start and change throughout.

        The experiment will pause when instructed with a new rule.

        You will now enter practice before the real task.

        Please press 'spacebar' to begin practice.
    KeyboardComponent key_resp_9
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine VersionNoDisplay
    CodeComponent code_10
      Code Type = Auto->JS
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      Begin Routine:
        VersionT = ('This is the Go/No Go task version '+'"'+ TaskVersion + '"'
        +'\n \n \n Please press spacebar to continue to the instructions.')
    TextComponent text_13
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text [set every repeat] = $VersionT
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    KeyboardComponent key_resp_10
      allowedKeys [set every repeat] = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 1.0
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Flow
  Routine Hard_Script
  Routine VersionNoDisplay
  Routine EmotionTaskInstructions
  Routine EmotionalTaskInstructions2
  Routine EmotionalTaskInstructions3
  LoopInitiator EPracticeOuterLoop loopType="TrialHandler"
    conditionsFile = EPracticeConditions/EPracticeMaster.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [OrderedDict([('CondFileP', 'EPracticeConditions/BlueEyes.csv'), ('Instructions', "Rule: When you see a blue image, do not press 'spacebar'.")]),
      OrderedDict([('CondFileP', 'EPracticeConditions/YellowEyes.csv'), ('Instructions', "Rule: When you see a yellow image, do not press 'spacebar'.")]),
      OrderedDict([('CondFileP', 'EPracticeConditions/BlueScram.csv'), ('Instructions', "Rule: When you see a blue image, do not press 'spacebar'.")]),
      OrderedDict([('CondFileP', 'EPracticeConditions/YellowScram.csv'), ('Instructions', "Rule: When you see a yellow image, do not press 'spacebar'.")])]
    Routine EPracticeInstructions2
    LoopInitiator EPracticeInnerLoop loopType="TrialHandler"
      conditionsFile = $CondFileP
      loopType = random
      nReps = 1
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      Routine EPracticeISI
      Routine EPracticeTrial
      Routine PracticeFeedbackBlock
    LoopTerminator EPracticeInnerLoop
    Routine Add
  LoopTerminator EPracticeOuterLoop
  Routine EndPracticeEndInstructions
  Routine RealTaskPreInstructions
  LoopInitiator MasterLoop loopType="TrialHandler"
    conditionsFile = $VersionSelection
    loopType = random
    nReps = 1
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    LoopInitiator OuterLoop loopType="TrialHandler"
      conditionsFile = $MasterCondFile
      isTrials = False
      loopType = sequential
      nReps = 1
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      Routine Instructions_2
      LoopInitiator InnerLoop loopType="TrialHandler"
        conditionsFile = $CondFile
        loopType = sequential
        nReps = 1
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        Routine ISI_2
        Routine EmotTrial
      LoopTerminator InnerLoop
      Routine Add2
      Routine EndBlock
    LoopTerminator OuterLoop
  LoopTerminator MasterLoop
  Routine EndEmotionTask
