PsychoPy2experiment version="2024.2.4"
Settings
  Experiment info = {'participant': 'P000', 'Study Name': '', 'Task Version (required to run)': '1 or 2', 'PRE/POST': 'Pre or Post'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1680, 1050]
  color = $[-0.3000, -0.3000, -0.3000]
  expName = Go No-Go Task
  keyboardBackend = ioHub
  runMode = 1
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Routines
  Routine Start
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    CodeComponent Initalisation_Code
      Code Type = Auto->JS
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      Begin Experiment:
        import pandas as pd

        fileName = ['SadFaces.csv', 'NeutralFaces.csv', 'HappyFaces.csv']
        conditionFile = pd.DataFrame(columns=['FaceFile'])  # where 'painting' is the column name for your images

        for files in fileName:
            myDat = pd.read_csv(files)  # Get conditions file
            myDat = myDat.sample(frac=1).reset_index(drop=True)  # Shuffle the dataframe
            myDat = myDat.head(8)  # Take first 8 rows from sheet
            conditionFile = conditionFile.append(myDat)  # Append to new conditions file variable

        conditionFile.to_csv("randPainting.csv", index=False)  # Save to new csv file for use in the loop handler.

        #create initial target set
        imgList1 = glob.glob(os.path.join('stim','*.png'))
        random.shuffle(imgList1)
        targetset = [visual.ImageStim(window, img) for img in imgList1[:3]]
    CodeComponent Background_Box
      Code Type = Auto->JS
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      Begin Experiment:
        from psychopy import visual

        grayBox = visual.rect.Rect(win, width=0.8, height=0.8, units='', lineWidth=0, lineColor=None, lineColorSpace=None, fillColor=[0.004, 0.004, 0.004], fillColorSpace='none', pos=(0, 0))
      Begin Routine:
        grayBox.setAutoDraw(True)
  Routine Instructions
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    TextComponent Text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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    KeyboardComponent key_resp_2
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Topload
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    CodeComponent code_3
      Code Type = Auto->JS
  Routine Hard_Script
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    CodeComponent Disable_Mouse
      Code Type = Auto->JS
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      Begin Experiment:
        win.setMouseVisible(False)
    CodeComponent Block_Set
      Code Type = Auto->JS
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      Begin Experiment:
        BlockNo = 1
        PractNo = 1
    CodeComponent Task_Ver_Set
      Code Type = Auto->JS
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      Begin Experiment:
        # Get and clean version input
        TaskVersion = str(expInfo.get('Task Version (required to run)', '')).strip()

        # Choose path based on version
        if TaskVersion == '1':
            basePath = 'ParentConditions/'
        elif TaskVersion == '2':
            basePath = 'ParentConditions/'
        else:
            # show error and exit
            errMsg = visual.TextStim(
                win=win,
                text="Warning: Must enter a valid task version number\n(i.e., 1, or 2). \n\n Press any key to quit.",
                color='black',
                height=0.025
            )
            errMsg.draw()
            win.flip()
            event.waitKeys()
            core.quit()

        # Construct filename
        VersionSelection = basePath + f'ConditionsMaster_v{TaskVersion}.xlsx'
    CodeComponent Bgrd_Box
      Code Type = Auto->JS
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      Begin Experiment:
        grayBox = visual.rect.Rect(win, width=0.8, height=0.8, units='', lineWidth=0, lineColor=None, lineColorSpace=None, fillColor='grey', fillColorSpace=None, pos=(0, 0))
    CodeComponent Initialise_Eyetracker
      Code Type = Auto->JS
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      Before Experiment:
        import pylink
        import os
        from psychopy import gui, core
        from EyeLinkCoreGraphicsPsychoPy import EyeLinkCoreGraphicsPsychoPy

        # === Prompt for filename ===
        while True:
            dlg = gui.Dlg("Enter EDF filename")
            dlg.addField("Filename (≤8 chars)", "TEST")
            ok_data = dlg.show()
            if not dlg.OK:
                core.quit()
            edf_fname = ok_data[0].split(".")[0]
            if len(edf_fname) <= 8 and edf_fname.isalnum():
                break

        edf_file = edf_fname + ".EDF"
        results_dir = "eyetracker_data"
        if not os.path.exists(results_dir):
            os.makedirs(results_dir)
      Begin Routine:
        # === Connect to EyeLink ===
        try:
            el_tracker = pylink.EyeLink("100.1.1.1")
        except:
            el_tracker = pylink.EyeLink(None)  # Dummy Mode fallback

        el_tracker.setOfflineMode()
        el_tracker.openDataFile(edf_file)

        # === Screen and calibration setup ===
        scn_w, scn_h = win.size
        el_tracker.sendCommand(f"screen_pixel_coords = 0 0 {scn_w - 1} {scn_h - 1}")
        el_tracker.sendMessage(f"DISPLAY_COORDS 0 0 {scn_w - 1} {scn_h - 1}")
        genv = EyeLinkCoreGraphicsPsychoPy(el_tracker, win)
        pylink.openGraphicsEx(genv)
  Routine Break
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  Routine Instructions_2
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    TextComponent text_2
      color = $[0.1686, -0.6000, -0.5608]
      letterHeight = 0.03
      pos [set every repeat] = (0, -0.10)
      startVal [time (s)] = 0.0
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      text [set every repeat]:
        $Instructions
    TextComponent text_3
      color = black
      letterHeight = 0.03
      pos [set every repeat] = (0, -0.25)
      startVal [time (s)] = 3.0
      text [set every repeat] = Please press 'spacebar' to begin.
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    KeyboardComponent key_resp_3
      allowedKeys [set every repeat] = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 3.0
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    TextComponent TaskBlock
      color = black
      letterHeight = 0.03
      pos = (-0.07, 0.05)
      startVal [time (s)] = 0.0
      text [set every repeat] =  Task block:
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    TextComponent BlockNo1
      color [set every repeat] = green
      letterHeight [set every repeat] = 0.03
      pos [set every repeat] = (0.025, 0.05)
      startVal [time (s)] = 0.0
      text [set every repeat] = $BlockNo
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    TextComponent OfBlock
      color = black
      letterHeight = 0.03
      pos = (0.07, 0.05)
      startVal [time (s)] = 0.0
      text [set every repeat] = of 6.
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    CodeComponent Box14
      Code Type = Auto->JS
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      Each Frame:
        grayBox.draw()
  Routine EmotionTaskInstructions
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    TextComponent Instructions_Text_1
      color = black
      letterHeight [set every repeat] = 0.025
      startVal [time (s)] = 0.0
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      text [set every repeat]:
        During this task, images appear
        onscreen. Images appear for a short
        period of time (450ms).

        At times, you must press 'spacebar' while
        images appear. Failing to do so leads to an
        incorrect result (miss).


        Please press 'spacebar' to continue.
    KeyboardComponent EmotionTaskInstructions1
      allowedKeys [set every repeat] = 'space'
      discard previous = False
      forceEndRoutine = True
      startVal [time (s)] = 0.2
      store = nothing
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    CodeComponent Box2
      Code Type = Auto->JS
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      Each Frame:
        grayBox.draw()
  Routine ISI_2
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    CodeComponent TimeSetISI
      Code Type = Auto->JS
      disabled = True
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      Begin Routine:
        if InnerLoop.thisN == 0: # only on the first trial
            jitters = [1.2,1.21,1.22,1.23,1.24,1.25,1.26,1.27,1.28
            ,1.29,1.30,1.31,1.32,1.33,1.34,1.35,1.36,1.37,1.38,1.39,1.4,1.41,
            1.42,1.43,1.44,1.45,1.46,1.47,1.48,1.49,1.5,1.51,1.52,1.53,
            1.54,1.55,1.56,1.57,1.58,1.59,1.6,1.61,1.62,1.63,1.64,
            1.65,1.66,1.67,1.68,1.69,1.7,1.71,1.72,1.73,1.74,1.75,1.76,
            1.77,1.78,1.79,1.8,1.81,1.82,1.83,1.84,1.85,1.86,1.87,1.88,1.89,1.9,1.91,1.92,1.93,
            1.94,1.95,1.96,1.97,1.98,1.99,2] # create the list
            shuffle(jitters) # randomise its order

        current_jitter = jitters.pop() # extract one entry on each trial
        thisExp.addData('ISIjitter', current_jitter) # record in the data for this trial
    TextComponent Pre_ISI_Text
      color = black
      letterHeight = 0.18
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text [set every repeat] = +
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    CodeComponent Timer_1
      Code Type = Auto->JS
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      Begin Routine:
        time_trialBegin = globalClock.getTime()

        if TaskVersion in ('1', '2'):

            el_tracker.sendMessage(f"TRIAL_BEGIN")
            el_tracker.sendMessage(f"TRIAL_TIME_BEGIN {time_trialBegin:.3f}")

            el_tracker.sendMessage('!V PRE_ISI TRIAL_NO %s' % Trial_No)
            el_tracker.sendMessage('!V PRE_ISI TRIAL_TYPE %s' % Trial_Type)
            el_tracker.sendMessage('!V PRE_ISI EXPRESS %s' % Express)
            el_tracker.sendMessage('!V PRE_ISI FACE_LUM %s' % FaceE_Luminance)
            el_tracker.sendMessage('!V PRE_ISI COLOUR_LUM %s' % Colour_Luminance)
      End Routine:
        time_trialEnd = globalClock.getTime()

        thisExp.addData('PRE_ISI_Begin', time_trialBegin)
        thisExp.addData('PRE_ISI_End', time_trialEnd)
    CodeComponent Box16
      Code Type = Auto->JS
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      Each Frame:
        grayBox.draw()
  Routine EmotTrial
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    KeyboardComponent key_resp
      allowedKeys [set every repeat] = 'space', 'None'
      correctAns = $CorrectAnsP
      forceEndRoutine = False
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0.45
      storeCorrect = True
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    ImageComponent FaceSet
      color = $[1, 1, 1]
      image [set every repeat] = $FaceE
      size [set every repeat] = (0.3, 0.125)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0.45
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    ImageComponent Colour
      color = $[1, 1, 1]
      image [set every repeat] = $ColourF
      opacity [set every repeat] = 0.25
      size [set every repeat] = (0.3, 0.125)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0.45
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    CodeComponent Timer_2
      Code Type = Auto->JS
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      Begin Routine:
        time_trialBegin = globalClock.getTime()

        if TaskVersion in ('1', '2'):

            el_tracker.sendMessage('!V STIMULUS_DISPLAY TRIAL_NO %s' % Trial_No)
            el_tracker.sendMessage('!V STIMULUS_DISPLAY TRIAL_TYPE %s' % Trial_Type)
            el_tracker.sendMessage('!V STIMULUS_DISPLAY EXPRESS %s' % Express)
            el_tracker.sendMessage('!V STIMULUS_DISPLAY FACE_LUM %s' % FaceE_Luminance)
            el_tracker.sendMessage('!V STIMULUS_DISPLAY COLOUR_LUM %s' % Colour_Luminance)
      End Routine:
        time_trialEnd = globalClock.getTime()

        thisExp.addData('Stimulus_Display_Start', time_trialBegin)
        thisExp.addData('Stimulus_Display_End', time_trialEnd)

        if TaskVersion in ('1', '2'):
            if key_resp.keys == 'space' and CorrectAnsP == 'space':
                el_tracker.sendMessage("STIMULUS DISPLAY CORRECT GO")

            if key_resp.keys == 'space' and CorrectAnsP == 'None':
                el_tracker.sendMessage("STIMULUS DISPLAY INCORRECT GO")

            if key_resp.keys == '' and CorrectAnsP == 'space':
                el_tracker.sendMessage("STIMULUS DISPLAY INCORRECT NOGO")

            if key_resp.keys == '' and CorrectAnsP == 'None':
                el_tracker.sendMessage("STIMULUS DISPLAY CORRECT NOGO")
    CodeComponent Box17
      Code Type = Auto->JS
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      Each Frame:
        grayBox.draw()
  Routine EndBlock
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    TextComponent EndBlockText
      color = black
      letterHeight = 0.03
      pos = (0, 0.05)
      startVal [time (s)] = 0.0
      text = End of block.
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    KeyboardComponent key_resp_4
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.5
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    CodeComponent code_8
      Code Type = Auto->JS
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      Begin Routine:
        if BlockNo <= 6:
           Breaktext = 'Please take a break if needed.'
        else:
           Breaktext = ''
    TextComponent BreakText2
      color = black
      letterHeight = 0.03
      pos = (0, -0.10)
      startVal [time (s)] = 0.0
      text [set every repeat] = $Breaktext
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    TextComponent PressToContinue
      color = black
      letterHeight = 0.03
      pos = (0, -0.25)
      startVal [time (s)] = 0.0
      text [set every repeat] = Please press 'spacebar' to continue.
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    CodeComponent ContRouteMidLogic
      Code Type = Auto->JS
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      Begin Routine:
        if BlockNo == 4:
            continueRoutine = False
    CodeComponent Box20
      Code Type = Auto->JS
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      Each Frame:
        grayBox.draw()
  Routine EndEmotionTask
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    TextComponent End_Text
      color = black
      letterHeight = 0.025
      startVal [time (s)] = 0.0
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      text:
        End of test.

        Thank you for participating.

        Please inform the researcher of your completion.

        Press 'escape' to close.
    CodeComponent Eyetracker_Send
      Code Type = Auto->JS
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      Begin Routine:
        # Assume `el_tracker` and `edf_fname` are already defined

        if TaskVersion in ('1', '2'):
            if el_tracker.isConnected():
                el_tracker.setOfflineMode()
                pylink.msecDelay(500)

                try:
                    el_tracker.closeDataFile()
                except RuntimeError as err:
                    print("Error closing EDF on Host:", err)

                print("Transferring EDF file from Host...")

                # Define where to save locally
                local_path = f"eyetracker_data/{edf_fname}.EDF"  # or any path you want

                try:
                    el_tracker.receiveDataFile(edf_fname + ".EDF", local_path)
                    print(f"EDF successfully saved to {local_path}")
                except RuntimeError as err:
                    print("Error downloading EDF:", err)

                el_tracker.close()
    CodeComponent Box24
      Code Type = Auto->JS
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      Each Frame:
        grayBox.draw()
  Routine Break1
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    TextComponent BreakText1
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.1
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  Routine Blank
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    TextComponent text
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.1
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  Routine EmotionalTaskInstructions2
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    TextComponent Instructions_Text_2
      color = black
      letterHeight [set every repeat] = 0.025
      startVal [time (s)] = 0.0
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      text [set every repeat]:
        The images will have different features
        (eyes or squares). You only need to focus
        on the colour of the image.

        You need to press 'spacebar' for most images.
        But at times, you must withold pressing 'spacebar'.

        You will be instructed how to respond to images by rules.


        Please press 'spacebar' to continue.
    KeyboardComponent PressCont2
      allowedKeys [set every repeat] = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.2
      store = nothing
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    CodeComponent Box3
      Code Type = Auto->JS
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      Each Frame:
        grayBox.draw()
  Routine EPracticeInstructions
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  Routine EPracticeInstructions2
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    TextComponent Practice_Rule_Set
      color = $[0.1686, -0.6000, -0.5608]
      letterHeight = 0.03
      pos = (0, -0.10)
      startVal [time (s)] = 0.0
      text [set every repeat] = $Instructions
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    TextComponent Continue_Pract_Text
      color = black
      letterHeight = 0.03
      pos [set every repeat] = (0, -0.25)
      startVal [time (s)] = 3.0
      text [set every repeat] = Please press 'spacebar' to begin.
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    KeyboardComponent key_resp_7
      allowedKeys [set every repeat] = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 3.0
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    TextComponent Practice_Block_Number_Text
      color [set every repeat] = green
      font [set every repeat] = Arial
      letterHeight [set every repeat] = 0.03
      pos [set every repeat] = (0.055, 0.05)
      startVal [time (s)] = 0.0
      text [set every repeat] = $PractNo
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    TextComponent Practice_Block_Text
      color = black
      letterHeight = 0.03
      pos = (-0.0590, 0.05)
      startVal [time (s)] = 0.0
      text = Practice block:
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    TextComponent Practice_Block_Text_End
      color = black
      letterHeight = 0.03
      pos = (0.095, 0.05)
      startVal [time (s)] = 0.0
      text = of 2
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    CodeComponent Box6
      Code Type = Auto->JS
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      Each Frame:
        grayBox.draw()
  Routine EPracticeISI
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    CodeComponent EPracticeISICode
      Code Type = Auto->JS
      disabled = True
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      Begin Routine:
        if EPracticeInnerLoop.thisN == 0: # only on the first trial
            jitters = [1.2,1.3,1.4,1.5,1.6,1.7,1.8,1.9] # create the list
            shuffle(jitters) # randomise its order

        current_jitter = jitters.pop() # extract one entry on each trial
        thisExp.addData('ISIjitterPractice', current_jitter) # record in the data for this trial
    TextComponent EPracticeISIMarker
      color = black
      letterHeight [set every repeat] = 0.18
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text [set every repeat] = +
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    CodeComponent Box7
      Code Type = Auto->JS
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      Each Frame:
        grayBox.draw()
  Routine EPracticeTrial
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    KeyboardComponent Pract
      allowedKeys = 'space','None'
      correctAns = $CorrectAnsP
      forceEndRoutine = False
      startVal [time (s)] = 0.05
      stopVal [duration (s)] = 0.45
      storeCorrect = True
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    ImageComponent PracticeFace
      color = $[1, 1, 1]
      image [set every repeat] = $FaceE
      size = (0.3, 0.125)
      startVal [time (s)] = 0.05
      stopVal [duration (s)] = 0.45
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    ImageComponent ColourPractice
      color = $[1, 1, 1]
      image [set every repeat] = $ColourF
      opacity [set every repeat] = 0.25
      size [set every repeat] = (0.3, 0.125)
      startVal [time (s)] = 0.05
      stopVal [duration (s)] = 0.45
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    CodeComponent Feedback_code
      Code Type = Auto->JS
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      End Routine:
        if Pract.corr==1:
                PracticeFeedback = 'Correct'
                FeedbackColour = 'darkgreen'

        if Pract.corr==0:
                PracticeFeedback = 'Incorrect'
                FeedbackColour = 'darkred'

        if Pract.corr==0 and Pract.keys== None:
                PracticeFeedback = 'Miss (too slow)'
                FeedbackColour = 'tan'
    CodeComponent Box8
      Code Type = Auto->JS
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      Each Frame:
        grayBox.draw()
  Routine EPracticeEndBlock
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  Routine EndPracticeEndInstructions
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    TextComponent EndOfPractice
      color = black
      letterHeight [set every repeat] = 0.025
      startVal [time (s)] = 0.0
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      text [set every repeat]:
        End of practice.

        Please keep in mind: You will no longer
        receive feedback on your performance
        in the real task (e.g. "correct").

        Press 'spacebar' to continue
    KeyboardComponent key_resp_8
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.5
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    CodeComponent Box11
      Code Type = Auto->JS
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      Each Frame:
        grayBox.draw()
  Routine PracticeFeedbackBlock
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    TextComponent Practice_Feedback
      color [set every repeat] = $FeedbackColour
      letterHeight [set every repeat] = 0.05
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 2.0
      text [set every repeat] = $PracticeFeedback
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    CodeComponent Box10
      Code Type = Auto->JS
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      Each Frame:
        grayBox.draw()
  Routine RealTaskPreInstructions
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    TextComponent Begin_Real_Task_Text
      color = black
      letterHeight = 0.025
      startVal [time (s)] = 0.0
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      text:
        You will now begin the real task.

        Please press 'spacebar' to continue.
    KeyboardComponent key_resp_6
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent Box13
      Code Type = Auto->JS
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      Each Frame:
        grayBox.draw()
  Routine Add
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    CodeComponent code_4
      Code Type = Auto->JS
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      Begin Routine:
        PractNo = PractNo + 1
  Routine fff
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  Routine Add2
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    CodeComponent code_7
      Code Type = Auto->JS
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      Begin Routine:
        BlockNo = BlockNo + 1
  Routine EmotionalTaskInstructions3
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    TextComponent Instructions_Text_3
      color = black
      letterHeight = 0.025
      startVal [time (s)] = 0.0
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      text:
        Rules are given at the start and change throughout.

        The experiment will pause when instructed with a new rule.


        Please press 'spacebar' to continue.
    KeyboardComponent PressCont
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.2
      store = nothing
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    CodeComponent Box4
      Code Type = Auto->JS
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      Each Frame:
        grayBox.draw()
  Routine VersionNoDisplay
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    CodeComponent Version_Text
      Code Type = Auto->JS
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      Begin Routine:
        VersionT = ("This is the AGNG task version "+"'"+ TaskVersion + "'."
        +"\n \n \n Press 'spacebar' to continue to the instructions.")
    TextComponent Version_Display_Text
      color = black
      letterHeight = 0.0275
      startVal [time (s)] = 0.0
      text [set every repeat] = $VersionT
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    KeyboardComponent First_Cont_Text
      allowedKeys [set every repeat] = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.25
      store = nothing
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    CodeComponent Box1
      Code Type = Auto->JS
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      Each Frame:
        grayBox.draw()
  Routine ISI_3
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    TextComponent Post_ISI_Text
      color = black
      letterHeight = 0.18
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $POST_ISI
      text = +
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    CodeComponent Timer_3
      Code Type = Auto->JS
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      End Routine:
        time_trialEnd = globalClock.getTime()

        if TaskVersion in ('1', '2'):

            el_tracker.sendMessage('!V TRIAL END%s')
            el_tracker.sendMessage(f"TRIAL_TIME_END {time_trialEnd:.3f}")

        thisExp.addData('Post_ISI_End', time_trialEnd)
    CodeComponent Box19
      Code Type = Auto->JS
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      Each Frame:
        grayBox.draw()
  Routine Blank_2
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    TextComponent text_4
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.05
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    CodeComponent Box18
      Code Type = Auto->JS
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      Each Frame:
        grayBox.draw()
    CodeComponent Timer_4
      Code Type = Auto->JS
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      Begin Routine:
        time_trialBegin = globalClock.getTime()

        el_tracker.sendMessage('!V POST_ISI TRIAL_NO %s' % Trial_No)
        el_tracker.sendMessage('!V POST_ISI TRIAL_TYPE %s' % Trial_Type)
        el_tracker.sendMessage('!V POST_ISI EXPRESS %s' % Express)
        el_tracker.sendMessage('!V POST_ISI FACE_LUM %s' % FaceE_Luminance)
        el_tracker.sendMessage('!V POST_ISI COLOUR_LUM %s' % Colour_Luminance)

        if TaskVersion in ('1', '2'):
            if key_resp.corr == '1' and Trial_Type == 'Go':
                el_tracker.sendMessage("POST_ISI CORRECT GO")

            if key_resp.corr == '0' and Trial_Type == 'Go':
                el_tracker.sendMessage("POST_ISI INCORRECT GO")

            if key_resp.corr == '0' and Trial_Type == 'Inhibit':
                el_tracker.sendMessage("POST_ISI INCORRECT NOGO")

            if key_resp.corr == '1' and Trial_Type == 'Inhibit':
                el_tracker.sendMessage("POST_ISI CORRECT NOGO")
      End Routine:
        time_trialEnd = globalClock.getTime()

        thisExp.addData('Post_ISI_Start', time_trialBegin)
  Routine Recalib_Text
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    CodeComponent Skip_Routine_1
      Code Type = Auto->JS
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      Begin Routine:
        if BlockNo != 4:
            continueRoutine = False
    TextComponent Break_Text
      color = black
      letterHeight = 0.03
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 180
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      text:
        This is an extended rest period for three minutes.

        Please relax; you may exit the eyetracker.
    CodeComponent Break_Code
      Code Type = Auto->JS
      disabled = True
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      Begin Experiment:
        from psychopy import visual, core, event
        import numpy as np
      Begin Routine:
        # === SETTINGS ===
        timer_duration = 210  # in seconds
        radius = 0.075        # size of the circular timer
        pos = (0, 0)          # position of the timer on screen

        # === SETUP WINDOW ===
        #win = visual.Window(fullscr=True, color='grey', units='height')

        # === BACKGROUND BOX ===
        grayBox2 = visual.Rect(
            win,
            width=0.8,
            height=0.8,
            units='height',
            lineWidth=0,
            lineColor=None,
            fillColor=[0.004, 0.004, 0.004],
            fillColorSpace='rgb',
            pos=(0, 0)
        )

        # === CIRCLE BEHIND THE WEDGE ===
        circle_bg = visual.Circle(
            win,
            radius=radius,
            edges=128,
            fillColor=[0.1, 0.1, 0.1],  # dark gray
            fillColorSpace='rgb',
            lineColor=None,
            pos=pos,
            autoDraw=False
        )

        # === TIMER WEDGE FUNCTION ===
        def make_wedge(progress_fraction, radius=0.2, resolution=100):
            # Creates a counterclockwise wedge starting from top (90 degrees)
            angle = 360 * progress_fraction
            num_points = max(2, int(resolution * progress_fraction))
            theta = np.linspace(90, 90 + angle, num_points)
            x = np.cos(np.deg2rad(theta)) * radius
            y = np.sin(np.deg2rad(theta)) * radius
            verts = [(0, 0)] + list(zip(x, y))
            return verts

        # === INITIALIZE TIMER CLOCK ===
        timer_clock = core.Clock()

        # === INITIALIZE WEDGE SHAPE ===
        wedge = visual.ShapeStim(
            win,
            vertices=make_wedge(1.0, radius),
            fillColor=[0.28, 0.28, 0.28],
            lineColor=None,
            fillColorSpace='rgb',
            pos=pos,
            closeShape=True,
            autoDraw=False
        )

        # === OPTIONAL LABEL TEXT ===
        label = visual.TextStim(
            win,
            text="This is a break period. You are over 50% complete.\nYou may relax and exit the eyetracker.",
            pos=(0, -0.325),
            color='black',
            height=0.025
        )

        # === START TIMER ===
        timer_clock.reset()
        running = True

        while running:
            elapsed = timer_clock.getTime()
            progress = max(0, 1 - (elapsed / timer_duration))

            # ESC to quit
            keys = event.getKeys()
            if 'escape' in keys:
                core.quit()

            # Update wedge
            if elapsed < timer_duration:
                wedge.vertices = make_wedge(progress, radius)

            # Draw components (in order)
            grayBox2.draw()       # background box
            circle_bg.draw()      # circle background behind wedge
            if elapsed < timer_duration:
                wedge.draw()      # wedge timer
            label.draw()          # text label

            # Flip screen
            win.flip()

            # End after time limit
            if elapsed >= timer_duration:
                running = False

        # === CONTINUE TO NEXT ROUTINE (no exit) ===
        # Leave win open, ready for next block or routine
      Each Frame:
        if continueRoutine:
            grayBox2.draw()

            elapsed = timer_clock.getTime()
            progress = max(0, 1 - (elapsed / timer_duration))

            wedge.vertices = make_wedge(progress)

            if elapsed < timer_duration:
                wedge.draw()
    CodeComponent Box21
      Code Type = Auto->JS
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      Each Frame:
        grayBox.draw()
  Routine Recalib_Text_2
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    CodeComponent Skip_Routine_2
      Code Type = Auto->JS
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      Begin Routine:
        if BlockNo != 4:
            continueRoutine = False
    TextComponent End_Break_Text
      color = black
      letterHeight = 0.03
      startVal [time (s)] = 0.0
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      text:
        The break period has ended. Please call the researcher.

        You will begin recalibration on the next screen.


        Please press 'spacebar' to continue.
    KeyboardComponent Calib_keys_1
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.2
      store = nothing
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    CodeComponent Box22
      Code Type = Auto->JS
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      Each Frame:
        grayBox.draw()
  Routine Recalib
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    CodeComponent Recal_Code
      Code Type = Auto->JS
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      Begin Routine:
        if BlockNo == 4:
            if TaskVersion in ('1', '2'):
                el_tracker.doTrackerSetup()
                ContinueRoutine = True
            else:
                ContinueRoutine = False
        else:
            ContinueRoutine = False
  Routine Drift_Check
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    CodeComponent ReDrift_Code
      Code Type = Auto->JS
      disabled = True
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      Begin Routine:
        if BlockNo == 4:
            if TaskVersion in ('1', '2'):
                el_tracker.doDriftCorrect(int(win.size[0]/2), int(win.size[1]/2), 1, 1)
                continueRoutine = True
            else:
                continueRoutine = False
        else:
            continueRoutine = False
  Routine End_Calib_Text
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    CodeComponent Skip_Routine_5
      Code Type = Auto->JS
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      Begin Routine:
        if BlockNo != 4:
            continueRoutine = False
    TextComponent Recalib_Text_3
      color = black
      letterHeight = 0.03
      startVal [time (s)] = 0.0
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      text:
        The recalibration has been completed.

        You will return to the task on the next screen.


        Please press 'spacebar' to continue.
    KeyboardComponent Recalib_keys_2
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.2
      store = nothing
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    CodeComponent Box23
      Code Type = Auto->JS
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      Each Frame:
        grayBox.draw()
  Routine EmotionalTaskInstructions2p5
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    TextComponent Instructions_Text_2p5
      color = black
      letterHeight = 0.025
      pos = (0, 0.2)
      startVal [time (s)] = 0.0
      text = Between images, you will see a cross like this:
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    TextComponent Cross_demonstration
      color = black
      letterHeight = 0.175
      startVal [time (s)] = 0.0
      text = +
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    TextComponent Focus_Instuctions
      color = black
      letterHeight = 0.025
      pos = (0, -0.2)
      startVal [time (s)] = 0.0
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      text:
        When it appears, please focus on it.


        Please press 'spacebar' to continue.
    KeyboardComponent Instr_Cont
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.2
      store = nothing
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    CodeComponent Box5
      Code Type = Auto->JS
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      Each Frame:
        grayBox.draw()
  Routine PrePractice_Text
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    TextComponent LastInstrText
      color = black
      letterHeight = 0.025
      startVal [time (s)] = 0.0
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      text:
        When you have completed 50% of the experiment,
        there will be a break period.

        You will begin practice on the next screen.


        Please press 'spacebar' to begin practice.
    KeyboardComponent InstrContPress
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.2
      store = nothing
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    CodeComponent Box5p5
      Code Type = Auto->JS
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      Each Frame:
        grayBox.draw()
  Routine Pre_Calib_Instructions
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    TextComponent PreCalib_Text
      color = black
      letterHeight = 0.025
      startVal [time (s)] = 0.0
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      text:
        On the next screen, you will begin the eyetracker calibration.


        Press 'spacebar' to continue.
    KeyboardComponent PressCalibKey
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.2
      store = nothing
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    CodeComponent Box12
      Code Type = Auto->JS
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      Each Frame:
        grayBox.draw()
  Routine EyeT_Calib
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    CodeComponent EyeT_Calib
      Code Type = Auto->JS
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      Begin Routine:
        if TaskVersion == '1' or TaskVersion == '2':
            el_tracker.doTrackerSetup()
  Routine EyeT_DriftCheck
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    CodeComponent Drift_Check_1
      Code Type = Auto->JS
      disabled = True
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      Begin Routine:
        # Run drift correction at screen center
        if TaskVersion == '1' or TaskVersion == '2':
            el_tracker.doDriftCorrect(int(win.size[0]/2), int(win.size[1]/2), 1, 1)
  Routine Begin_Rec
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    CodeComponent Record_Code
      Code Type = Auto->JS
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      Begin Routine:
        if TaskVersion in ('1', '2'):
            el_tracker.sendMessage('!V START_BLOCK')
            el_tracker.sendMessage('!V RECORDING_START_BLOCK %s' % BlockNo)
            el_tracker.startRecording(1, 1, 1, 1)
            pylink.pumpDelay(200)
    CodeComponent Box15
      Code Type = Auto->JS
      disabled = True
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      Each Frame:
        grayBox.draw()
  Routine End_Record
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    CodeComponent End_Record_2
      Code Type = Auto->JS
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      End Routine:
        # This End Routine tab of the elStopRecord component stops eye tracker recording

        if TaskVersion in ('1', '2'):
            core.wait(0.5)

            # stop recording; add 100 msec to catch final events before stopping
            el_tracker.sendMessage('!V END_BLOCK')
            el_tracker.sendMessage('!V RECORDING_END_BLOCK %s' % BlockNo)
            pylink.pumpDelay(100)
            el_tracker.stopRecording()

            core.wait(0.5)

            # Optional clean-up on the Host display
            el_tracker.sendCommand('clear_screen 0')             # Clear host display
            el_tracker.sendMessage('!V CLEAR 128 128 128')       # Clear overlay in Data Viewer

            continueRoutine = False
  Routine Blank_3
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    TextComponent text_5
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.05
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    CodeComponent Box18_2
      Code Type = Auto->JS
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      Each Frame:
        grayBox.draw()
    CodeComponent Timer
      Code Type = Auto->JS
  Routine Blank_4
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    TextComponent text_6
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.05
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    CodeComponent Box18_3
      Code Type = Auto->JS
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      Each Frame:
        grayBox.draw()
    CodeComponent Timer_5
      Code Type = Auto->JS
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      End Routine:
        time_trialEnd = globalClock.getTime()

        thisExp.addData('Pre_ISI_End', time_trialEnd)
Flow
  Routine Hard_Script
  Routine VersionNoDisplay
  Routine EmotionTaskInstructions
  Routine EmotionalTaskInstructions2
  Routine EmotionalTaskInstructions3
  Routine EmotionalTaskInstructions2p5
  Routine PrePractice_Text
  LoopInitiator EPracticeOuterLoop loopType="TrialHandler"
    conditionsFile = EPracticeConditions/EPracticeMaster.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [{'CondFileP': 'EPracticeConditions/BlueEyes.csv', 'Instructions': "Rule: When you see a blue image, \n do not press 'spacebar'."},
      {'CondFileP': 'EPracticeConditions/YellowEyes.csv', 'Instructions': "Rule: When you see a yellow image, \n do not press 'spacebar'."},
      {'CondFileP': 'EPracticeConditions/BlueScram.csv', 'Instructions': "Rule: When you see a blue image, \n do not press 'spacebar'."},
      {'CondFileP': 'EPracticeConditions/YellowScram.csv', 'Instructions': "Rule: When you see a yellow image,  \n do not press 'spacebar'."}]
    Routine EPracticeInstructions2
    LoopInitiator EPracticeInnerLoop loopType="TrialHandler"
      conditionsFile = $CondFileP
      loopType = random
      nReps = 1
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      Routine EPracticeISI
      Routine EPracticeTrial
      Routine Blank_3
      Routine PracticeFeedbackBlock
    LoopTerminator EPracticeInnerLoop
    Routine Add
  LoopTerminator EPracticeOuterLoop
  Routine EndPracticeEndInstructions
  Routine Pre_Calib_Instructions
  Routine EyeT_Calib
  Routine EyeT_DriftCheck
  Routine RealTaskPreInstructions
  LoopInitiator MasterLoop loopType="TrialHandler"
    conditionsFile = $VersionSelection
    loopType = random
    nReps = 1
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    LoopInitiator OuterLoop loopType="TrialHandler"
      conditionsFile = $MasterCondFile
      isTrials = False
      loopType = sequential
      nReps = 1
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      Routine Instructions_2
      Routine Begin_Rec
      LoopInitiator InnerLoop loopType="TrialHandler"
        conditionsFile = $CondFile
        loopType = sequential
        nReps = 1
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        Routine ISI_2
        Routine Blank_4
        Routine EmotTrial
        Routine Blank_2
        Routine ISI_3
      LoopTerminator InnerLoop
      Routine End_Record
      Routine Add2
      Routine EndBlock
      Routine Recalib_Text
      Routine Recalib_Text_2
      Routine Recalib
      Routine Drift_Check
      Routine End_Calib_Text
    LoopTerminator OuterLoop
  LoopTerminator MasterLoop
  Routine EndEmotionTask
